PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  expName = group project
  keyboardBackend = ioHub
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Routines
  Routine trial_1
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
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    PolygonComponent target
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      pos [set every repeat] = (random()-0.5, random()-0.5)
      shape = triangle
      size [set every repeat] = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random()>0.5:
            num_distr = 50
            thisExp.addData('num_distr',num_distr)
        else:
            num_distr = 50
            thisExp.addData('num_distr',num_distr)

        distractors = []

        for i in range(num_distr):

            polygon = visual.Rect(
            win=win, name='square',
            width=[0.05, 0.05][0], height=[0.05, 0.05][1],
            ori=0.0, pos=(random()-0.5, random()-0.5), anchor='center',
            lineWidth=1.0, colorSpace='rgb',  lineColor='white', fillColor='white',
            opacity=None, depth=-1.0, interpolate=True)

            distractors.append(polygon)


        for polygon in distractors:
            polygon.setAutoDraw(True)
      End Routine:
        for polygon in distractors:
            polygon.setAutoDraw(False)
    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1.0
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  Routine trial_2
    PolygonComponent fixation2
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent target2
      fillColor = 0.8667, 0.0196, 0.8667
      pos [set every repeat] = (random()-0.5, random()-0.5)
      shape = triangle
      size [set every repeat] = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if random()>0.5:
            num_distr = 50
            thisExp.addData('num_distr',num_distr)
        else:
            num_distr = 50
            thisExp.addData('num_distr',num_distr)

        distractors = []
        colors=['blue','white','yellow','red','green','purple','black','violet']
        for i in range(num_distr):

            polygon = visual.Rect(
            win=win, name='square',
            width=[0.05,0.05][0], height=[0.05,0.05][1],
            ori=0.0, pos=(random()-0.5, random()-0.5), anchor='center',
            lineWidth=1.0, colorSpace='rgb', fillColor=colors[randint(0,len(colors))],
            opacity=None, depth=-1.0, interpolate=True)

            distractors.append(polygon)

        for polygon in distractors:
            polygon.setAutoDraw(True)
      End Routine:
        for polygon in distractors:
            polygon.setAutoDraw(False)
    MouseComponent mouse_2
      clickable = target
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1.0
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    PolygonComponent distr
      fillColor [set every repeat] = 0.8667, 0.0196, 0.8667
      lineColor [set every repeat] = white
      shape = rectangle
      size = (0.05, 0.05)
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine trial_1
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 30
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    Routine trial_2
  LoopTerminator trials_2
